PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Study
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Routines
  Routine trial
  Routine Begrüßung
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Um das Experiment zu starten, drücken Sie die <Leertaste>

        Viel Spaß!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EinleistungEyetracking
  Routine EyeTrackingText
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Um automatisierte Tests von Programmen durchzuführen nutzt man immer häufiger Continues Integration. Dies führt dazu, dass Programme immer schneller und besser ausgeliefert werden können. Alte Fehlerfindungsmethoden wie RubberDuckDebugging haben aber immernoch Ihre daseinsberechtigung. 
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stop
  Routine Brocantiny
  Routine BrocantinyErklräung
  Routine ProgrammierungErklärung
  Routine Programm
  Routine Sätze
  Routine Danke
Flow
  Routine Begrüßung
  Routine EyeTrackingText
  Routine Sätze
  Routine Sätze
  Routine Sätze
  Routine Sätze
  Routine Stop
  Routine BrocantinyErklräung
  Routine Brocantiny
  Routine Brocantiny
  Routine Brocantiny
  Routine ProgrammierungErklärung
  Routine Programm
  Routine Programm
  Routine Programm
  Routine Danke
